PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = odd_one_out_experiment
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcomeText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome, in this task you will be presented with three chess scenario's, side-by-side.

        It is your task to select the odd-one-out. In other words, there is one scenario the most different when comparing to the other two scenario's.
        To select the odd-one-out you can use your mouse. Click on the scenario you think is the most distinct.

        We will start with a few practice rounds.

        Press <space> to continue...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine practice
    ImageComponent image
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + imageName
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine experiment
  Routine exit
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/tomva/OneDrive/KU Leuven/Master Theory and Research/StudentJob/Triplet similarity experiment/triplet-similarity-experiment/datasets/fmri_dataset/dataset.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('imageName', 'C1_Images_Frombeautiful.png'), ('fen', '2r2r1k/1b5p/p2Q1q2/3p1P2/3Pp3/8/6RP/6RK w - - 0 1'), ('check', 1), ('strategy', 0), ('visual', 0), ('stim_id', 0)]),
      OrderedDict([('imageName', 'C1_Images_SteinitzNN.png'), ('fen', 'r2q2kr/1p4p1/p1p2R1p/5p2/7P/P3Q3/1P4P1/7K w - - 0 1'), ('check', 1), ('strategy', 0), ('visual', 1), ('stim_id', 1)]),
      OrderedDict([('imageName', 'C1_Images_WinterFriede(Reversed).png'), ('fen', '1k6/ppp3pp/3p1b2/1P1P1Q2/3qr3/2R5/P1R4P/1K6 w - - 0 1'), ('check', 1), ('strategy', 0), ('visual', 2), ('stim_id', 2)]),
      OrderedDict([('imageName', 'C2_Images_KekhayovPetrov(Reversed).png'), ('fen', '1k6/1b1q2p1/2R4p/2QB4/4Pp2/P4P2/6rP/KR6 w - - 0 1'), ('check', 1), ('strategy', 1), ('visual', 3), ('stim_id', 3)]),
      OrderedDict([('imageName', 'C2_Images_KrauseMeinhardt.png'), ('fen', '4rk2/1Q3p1r/1p2bB2/p5Rp/P5pP/6P1/1Pq5/3R2K1 w - - 0 1'), ('check', 1), ('strategy', 1), ('visual', 4), ('stim_id', 4)]),
      OrderedDict([('imageName', 'C2_Images_Replacement4.png'), ('fen', 'k1n2br1/p1r5/QpP1pp2/3P4/3P3p/2P2PBq/3N1P1P/R3R1K1 w - - 0 1'), ('check', 1), ('strategy', 1), ('visual', 5), ('stim_id', 5)]),
      OrderedDict([('imageName', 'C2_Images_SkujaRozenbergs(Reversed).png'), ('fen', '6k1/1p1R1p1p/p5p1/P3n3/5N1P/2P2Q2/5PPK/4rq2 w - - 0 1'), ('check', 1), ('strategy', 1), ('visual', 6), ('stim_id', 6)])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
    Routine practice
  LoopTerminator trials
  Routine experiment
  Routine exit
